// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation" "TransformRigidityPenalty")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
(ImagePyramidSchedule 4 4 4 2 2 2 1 1 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 10.0 10.0 10.0)
(GridSpacingSchedule 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
// Keep low to allow for fast testing. Not recommended values!
(MaximumNumberOfIterations 25)
(NumberOfSamplesForExactGradient 10000)

// For fast testing:
(NumberOfJacobianMeasurements 2500 5000 10000)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric

// Just using the default values for the NC metric

(Metric0Weight 1)
(Metric1Weight 0.1 0.0001 0.00001)

// Rigidity computed on sub-domain specified with an image
(LinearityConditionWeight 100.0)
(OrthonormalityConditionWeight 1.0)
(PropernessConditionWeight 2.0)
(UseLinearityCondition "true")
(UseOrthonormalityCondition "true")
(UsePropernessCondition "true")
(DilateRigidityImages "false" "false" "false")
(DilationRadiusMultiplier 2.0)
(FixedRigidityImageName "")
(MovingRigidityImageName "/home/ckirst/Science/Projects/WholeBrainClearing/Vasculature/Analysis/ClearVessel/ClearMap/External/elastix/src/Testing/Data/3DCT_lung_followup_segmentation.mha")



// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 500)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
//(SampleRegionSize 50.0 50.0 50.0)
(MaximumNumberOfSamplingAttempts 5)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

